PsychoPy2experiment version="2023.2.3"
Settings
  Data filename = u'data/%s-%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SurveyTask
  keyboardBackend = ioHub
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Routines
  Routine trial
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    FormComponent form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.05
      Items = /Users/brainlab/Documents/GitHub/Attentional_Switching_EEG/AnxietySurveyTask/SCAARED_form.xlsx
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (0, 0.05)
      responseColor = white
      size = (1, 0.85)
      startVal [time (s)] = 0.0
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    ButtonComponent done_button
      bold = True
      font = Helvetica
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.45)
      size = (0.5, 0.09)
      startVal [time (s)] = 0
      text = Click here when done
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      callback:
        if form.complete:
            continueRoutine = False
        else:
            footer.setText('Please make sure you have answered every question.')
            if np.array_equal(footer.color, [1,1,1]):
                footer.color = 'lightgrey'
            else:
                footer.color = 'white'
            continueRoutine = True
    TextComponent footer
      font = Helvetica Neue
      letterHeight = 0.03
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
      text = Please answer every question.
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Flow
  Routine trial
